PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'Handedness': 'r/l', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  backgroundFit = cover
  color = -1.0000, -1.0000, -0.2471
  expName = RewardEffortLearning
  keyboardBackend = ioHub
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Routines
  Routine reward_rating
    SliderComponent reward
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_rewardRating
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent login_reward
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = reward.rating
      store = all keys
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    ImageComponent coins_little_2
      image = image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many_2
      image = image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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    CodeComponent get_rating_2
      Code Type = Auto->JS
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      Begin Experiment:
        reward_ratings = []
      End Routine:
        rewscale_value = reward.getRating()
        reward_ratings.append(rewscale_value)
    PolygonComponent photodiode_r1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine main_trial
    TextComponent text_6
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up!
    CodeComponent CheckKeys
      Code Type = Auto->JS
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      Begin Routine:
        #reset round score to 0
        rscore = 0
        winE = rscore+1
        npumps = 0
        maxPumps = effLevel
        key_sequence = [] # List to store the key sequence ('z' followed by 'p')
        achieved = 0

        if maintask.thisN == 0:
            if max_press_pSec_pract == 0:
                max_press_pSec = 4
            else:
                max_press_pSec = round(max_press_pSec_pract)  # Round to the nearest integer
            npumps_pSec = [0]
      Each Frame:
        # Check for key presses
        keys = event.getKeys()

        if keys:
            key_pressed = keys[0]

            # Check if the key pressed is 'z' and it's the first key in the sequence
            if key_pressed == 'z' and not key_sequence:
                key_sequence.append(key_pressed)

            # Check if the key pressed is 'p' and 'z' was pressed before it
            elif key_pressed == 'p' and 'z' in key_sequence:
                key_sequence.append(key_pressed)

            # If the sequence is complete ('z' followed by 'p'), increase the size of the shape
            if key_sequence == ['z', 'p']:
                npumps += 1
                key_sequence = []  # Reset the key sequence
      End Routine:
        # Check if the desired number of pumps has been reached
        if (npumps / max_press_pSec) * 100 >= maxPumps:
            achieved = True
            rscore += 1

        # Add current round score to the total score
        tscore += rscore

        npumps_pSec.append(npumps / t)

        print(max_press_pSec)
        print(npumps_pSec[-1])

        if max_press_pSec < npumps_pSec[-1]:
            max_press_pSec = npumps_pSec[-1]
            print('new max:', max_press_pSec)  # Added a comma to separate the string and variable

        # Save data
        maintask.addData('threshold', effTresh)  # Corrected 'treshold' to 'threshold'
        maintask.addData('npumps_pSec', npumps_pSec)
        maintask.addData('trial_duration', t)
        maintask.addData('# of presses', npumps)
        maintask.addData('trial score', rscore)
        maintask.addData('achieved', achieved)
    CodeComponent barSize
      Code Type = Auto->JS
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      Begin Experiment:
        batterySize=0.00
        batteryMaxSize=0.55
      Begin Routine:
        #balloon image's starting size
        batterySize=0.00
        achieved=False
        nPumps=0
        batterySizeIncr = batteryMaxSize/(max_press_pSec*timeAvailable)
      Each Frame:
        batterySize=npumps*batterySizeIncr
    CodeComponent countdownEasy
      Code Type = Py
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(timeAvailable)
            countdownStarted = True
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    ImageComponent tank
      image = TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background
      anchor = bottom-center
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      shape = rectangle
      size [set every frame] = $[.15, batterySize]
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_mt1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine cross
    TextComponent text2_2
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    PolygonComponent photodiode_fix1
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instructions
    TextComponent instrText
      letterHeight = 0.1
      pos = [0, .3]
      startVal [time (s)] = 0.0
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      text:
        [Placeholder Intro Video
        ]
    KeyboardComponent trial_select
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent init_mainexp
      Code Type = Auto->JS
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      Begin Experiment:
        rscore = 0
        #total score
        tscore = 0
  Routine effort_rating
    SliderComponent effort
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_effortRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How much fuel do you think you will need to get to the next planet?
    TextComponent text_effortRating_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent effort_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = effort.rating
      store = all keys
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    ImageComponent fuel_empty
      image [set every repeat] = fuelShipWhite.png
      pos = (-0.7, -0.3)
      size = (0.2,0.4)
      startVal [time (s)] = 0.0
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    ImageComponent fuel_full
      image = fuelShipFull-01.png
      pos = (0.7, -0.3)
      size = (0.34,0.5)
      startVal [time (s)] = 0.0
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    CodeComponent get_rating
      Code Type = Auto->JS
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      Begin Experiment:
        effort_ratings = []
      End Routine:
        effscale_value = effort.getRating()
        effort_ratings.append(effscale_value)
    PolygonComponent photodiode_r1_2
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine reward_rating_2
    SliderComponent reward_2
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_rewardRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent login_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = reward.rating
      store = all keys
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    ImageComponent coins_little
      image = stim/image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many
      image = stim/image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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  Routine Feedback_2
    CodeComponent checkAchieved
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        feedbackTime=3
      Begin Routine:
        if achieved==True:
            feedbackText=FeedbackText1
            crashShow=0
        else:
            feedbackText= FeedbackText2
            crashShow=1
    TextComponent feedbackMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
      text [set every repeat] = $feedbackText
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    ImageComponent image_rubies
      image [set every repeat] = $stimFile
      pos = (0, -0.4)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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    PolygonComponent photodiode_ft1
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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  Routine practice_instructions
    CodeComponent selectText
      Code Type = Auto->JS
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      Begin Experiment:
        instructions1 = ""
        instructions2 = ""
        instructions3 = ""
      Begin Routine:
        if instruct_slides.thisN == 1:
            instructions1="On the next screen, you will encounter a fuel tank marked with a red line. Your goal is to fill it up to the red line, just as demonstrated in the video."
            instructions2=""
            instructions3=""
            #picture=imgExample1.png
        else:
            instructions1="Alternate between pressing ''z'' with your left index finger and ''p'' with your right index finger as fast as you can to reach the red bar."
            instructions2="You will have 5 seconds."
            instructions3="Press ENTER to Start!"
            #picture=imgExample2.png
    TextComponent practice_intro_text1
      letterHeight = 0.1
      pos = (0, 0.55)
      startVal [time (s)] = 0.0
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      text:
        $instructions1
    TextComponent practice_intro_text2
      letterHeight = 0.1
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
      text = $instructions2
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    TextComponent practice_intro_text3
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = $instructions3
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    KeyboardComponent practice_start
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine practice
    TextComponent pract_text
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up and try to reach the red bar!
    CodeComponent CheckKeys_2
      Code Type = Auto->JS
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      Begin Experiment:
        max_press_pract = []  # Initialize max_press
        max_press_pSec_pract = -1
      Begin Routine:
        #reset round score to 0
        rscore = 0
        npumps = 0
        maxPumps = practPumps #max presses to complete a trial
        key_sequence = []  # List to store the key sequence ('z' followed by 'p')
        achieved = 0
        firstPump = False
      Each Frame:
        # Check for key presses
        keys = event.getKeys()

        if keys:
            key_pressed = keys[0]

            # Check if the key pressed is 'z' and it's the first key in the sequence
            if key_pressed == 'z' and not key_sequence:
                key_sequence.append(key_pressed)
            # Check if the key pressed is 'p' and 'z' was pressed before it
            elif key_pressed == 'p' and 'z' in key_sequence:
                key_sequence.append(key_pressed)
            # If the sequence is complete ('z' followed by 'p'), increase the size of the shape
            if key_sequence == ['z', 'p']:
                npumps += 1
                key_sequence = []
                if practicetrials.thisN == 0:
                    firstPump = True # Reset the key sequence

        if (-0.5+batterySize >= effTresh):
             achieved = True
             rscore = rscore+1
      End Routine:
        #add current round score to total score
        tscore += rscore

        npumps_pSec = npumps/t
        max_press_pract.append(npumps_pSec)
        max_press_pSec_pract = max(max_press_pract)

        practicetrials.addData('# of presses', npumps)
        practicetrials.addData('trial score', rscore)
        practicetrials.addData('treshold', effTresh)
        practicetrials.addData('max_press_pract', max_press_pract)
        practicetrials.addData('trial_duration', t)
        practicetrials.addData('max_press_pSec_pract',max_press_pSec_pract)
    CodeComponent countdownEasy_3
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted = False
        timeAvailable = 5
      Begin Routine:
        if not countdownStarted:
                countdownClock = core.CountdownTimer(timeAvailable)
                countdownStarted = True
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0 or (-0.5+ batterySize >=effTresh):
            continueRoutine = False  # End this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    CodeComponent barSize_2
      Code Type = Auto->JS
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      Begin Experiment:
        batterySize=0.00
        batteryMaxSize=0.55
      Begin Routine:
        batterySize=0.00
        achieved=False
        nPumps=0
        batterySizeIncr = batteryMaxSize/30
      Each Frame:
        batterySize=npumps*batterySizeIncr
    ImageComponent tank_2
      image = TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background_4
      anchor = bottom-center
      fillColor = 0.0902, -1.0000, -1.0000
      lineColor = 0.0902, -1.0000, -1.0000
      lineWidth = 2
      pos = [-0.5, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent background_outline
      anchor = bottom-center
      fillColor = $[1.0000, 1.0000, 1.0000]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody_2
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      shape = rectangle
      size [set every frame] = [.15, batterySize]
      startVal [time (s)] = 0.0
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    PolygonComponent treshLine
      fillColor = red
      lineColor = red
      lineWidth = 4
      pos [set every repeat] = [0, effTresh]
      shape = line
      size = [0.15, .1]
      startVal [time (s)] = 0.0
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    PolygonComponent photodiode_pr1
      anchor = bottom-left
      fillColor = black
      lineColor = black
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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  Routine practice_feedback
    CodeComponent checkAchieved_pract
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        feedbackTime=3
      Begin Routine:
        if achieved==True:
            feedbackText= 'Well done you reached the treshold!'

        else:
            feedbackText= 'Not quite there yet. Add a bit more power!'
    TextComponent feedbackMsg_pract
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
      text [set every repeat] = $feedbackText
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    PolygonComponent photodiode_pr2
      anchor = bottom-left
      fillColor = white
      pos = (-1,-1)
      shape = custom polygon...
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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  Routine video_instr
    MovieComponent instr_train
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /Users/alisaloosen/Desktop/video_v1.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine instr_quiz
    TextComponent Multiple_Choice1
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent press_enter
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Press ENTER to log in your response.
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    MouseComponent mouse
      clickable = [box1, box2, box3]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent box1
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, 0.1)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp1
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    TextboxComponent box2
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, -0.2)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $resp2
    TextboxComponent box3
      bold = False
      borderColor = 0.3569, 0.6941, 0.8039
      color = grey
      editable = False
      fillColor = 1,1,1
      letterHeight = 0.08
      pos = (0, -0.5)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $resp3
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        quiz_score = 0
        clickables = [box1, box2, box3]


        restart_loop = False
      Begin Routine:
        clicked_box = None # Initialize a variable to store the clicked box
        response = 0
        correct = None
        for box in clickables:
                    box.fillColor = 'white'
      Each Frame:
        # Check if the mouse is pressed in any of the boxes
        for clickable in clickables:
            if mouse.isPressedIn(clickable):
                # Reset the color of all boxes to white
                for box in clickables:
                    box.fillColor = 'white'

                # Change the color of the clicked box to blue
                clickable.fillColor = 'lightblue'
                clicked_box = clickable

        # Assign a value to a new variable based on the clicked box
        if clicked_box == box1:
            response = 1
        elif clicked_box == box2:
            response = 2
        elif clicked_box == box3:
            response = 3

        # Check if the response is correct
        correct = (response == correctResp)

        # Check if a response has been recorded
        if response !=0:
            print("Response:", response)
      End Routine:
        if correct: #update score
            quiz_score = quiz_score+1

        instructionquiz.addData('correct', correct)
        instructionquiz.addData('response', response)
        instructionquiz.addData('quiz_score', quiz_score)

        if instructionquiz.thisN == 3 and quiz_score < 3:
            instructionquiz.finished = True
            instructionquiz_rep.finished = False
        elif instructionquiz.thisN == 3 and quiz_score == 3:
            instructionquiz.finished = True
            instructionquiz_rep.finished = True
    KeyboardComponent next_quest
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = response>0
      store = all keys
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  Routine check
    TextComponent FeedbackQuiz2
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [condition] = correct
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        Exceptional work, future astronaut! Your answers were all spot-on.

        Let's continue to the main game.
    TextComponent FeedbackQuiz1
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [condition] = correct
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        Great effort, future astronaut! Some of your answers were unfortunately incorrect.

        Let's give it another try and help those astronaut skills find their orbit!
    ImageComponent image_rocket
      image [set every repeat] = $stimFile
      pos = (0, -0.4)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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  Routine check_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = hallo -test
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  Routine practice_instruction_vid
    TextComponent instrText_2
      letterHeight = 0.1
      pos = [0, .3]
      startVal [time (s)] = 0.0
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      text:
        [Placeholder Intro Video
        ]
    KeyboardComponent trial_select_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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Flow
  Routine practice_instruction_vid
  LoopInitiator instruct_slides loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine practice_instructions
  LoopTerminator instruct_slides
  LoopInitiator practicetrials loopType="TrialHandler"
    conditionsFile = pract1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'practPumps': 25, 'effTresh': -0.36},
      {'practPumps': 50, 'effTresh': -0.22},
      {'practPumps': 75, 'effTresh': -0.09},
      {'practPumps': 100, 'effTresh': 0.05},
      {'practPumps': 25, 'effTresh': -0.36},
      {'practPumps': 50, 'effTresh': -0.22},
      {'practPumps': 75, 'effTresh': -0.09},
      {'practPumps': 100, 'effTresh': 0.05}]
    Routine practice
    Routine practice_feedback
  LoopTerminator practicetrials
  Routine Instructions
  LoopInitiator instructionquiz_rep loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator instructionquiz loopType="TrialHandler"
      conditionsFile = quiz.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'correctResp': 3, 'question': 'How does the task mention that the requirements for fuel and the yield of rubies may change as you venture into new galaxies?', 'resp1': "1. They don't change; everything remains constant.", 'resp2': "2. The task doesn't mention any changes in different galaxies.", 'resp3': '3. Fuel and ruby requirements may change, so adaptability is crucial.'},
        {'correctResp': 2, 'question': 'What is the main objective of this game, and what are players required to collect on their cosmic journey?', 'resp1': '1. To explore new galaxies and discover alien lifeforms.', 'resp2': '2. To collect rubies on various planets.', 'resp3': '3. To master fast key pressing techniques for space travel.'},
        {'correctResp': 2, 'question': 'How should you manage your energy allocation when traveling to different planets, and why is this important?', 'resp1': '1. You should allocate maximum energy to all journeys to ensure they reach all planets.', 'resp2': '2. You should conserve energy and adapt to different planet requirements to maximize rubies.', 'resp3': '3. You should use the same amount of energy for all journeys to maintain consistency.'}]
      Routine instr_quiz
    LoopTerminator instructionquiz
    Routine check
  LoopTerminator instructionquiz_rep
  LoopInitiator maintask loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 50},
      {'Points': 4, 'FeedbackText1': 'You reached the planet, you get 4 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 4 rubies!', 'stimFile': 'image4.png', 'effLevel': 77},
      {'Points': 6, 'FeedbackText1': 'You reached the planet, you get 6 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 6 rubies!', 'stimFile': 'image6.png', 'effLevel': 85},
      {'Points': 6, 'FeedbackText1': 'You reached the planet, you get 6 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 6 rubies!', 'stimFile': 'image6.png', 'effLevel': 79},
      {'Points': 4, 'FeedbackText1': 'You reached the planet, you get 4 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 4 rubies!', 'stimFile': 'image4.png', 'effLevel': 87},
      {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 77},
      {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 66}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
    Routine reward_rating
    Routine cross
    Routine effort_rating
    Routine cross
    Routine main_trial
    Routine cross
    Routine Feedback_2
  LoopTerminator maintask
